PsychoPy2experiment version="2020.1.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = EDP
  Screen = 1
  Units = pix
  Window size (pixels) = [1280, 720]
  color = lightgray
  expName = EDP_test
  logging level = data
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Routines
  Routine instruction
    TextComponent text_ins
      color = black
      letterHeight = 40
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        hello

        press space to start
    ImageComponent OKbutton
      image = ./interface/OKbutton.png
      pos = (0, -300)
      saveStartStop = False
      size = (150,76)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = OKbutton
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent text_end
      color = black
      letterHeight = 37
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        experiment end

        wait for instructor
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        import matplotlib.pyplot as plt
        import numpy as np
        from scipy.optimize import curve_fit

        def utility(x,alpha):
            return x**alpha
        def utilityneg(x,alpha):
            return -x**alpha
      End Routine:
        y = [-100, 50, 75, 87.5, 25, 12.5, -50, -25, -12.5, -75, -87.5, 0, 100]
        x = [L, x1pos, x2pos, x3pos, x2posd, x3posd, x1neg, x2neg, x3neg, x2negd, x3negd, 0, 2000]
        ypos = np.array([50, 75, 87.5, 25, 12.5, 0, 100])
        yneg = np.array([-50, -25, -12.5, -75, -87.5, 0, -100])
        xpos = np.array([x1pos, x2pos, x3pos, x2posd, x3posd, 0, 2000])
        xneg = np.array([x1neg, x2neg, x3neg, x2negd, x3negd, 0, L])
        ypos = np.sort(ypos)
        xpos = np.sort(xpos)
        xneg = np.sort(xneg)
        yneg = np.sort(yneg)
        negyneg = -yneg
        negyneg = np.flip(np.sort(negyneg)) # values are positive now
        negxneg = -xneg
        negxneg = np.flip(np.sort(negxneg)) # values are positive now



        alphapos = curve_fit(utility,xpos,ypos)
        alphaneg = curve_fit(utility,negxneg,negyneg)

        plt.plot(x, y, 'g.')
        plt.plot(xpos, utility(xpos, alphapos[0]), 'r-',label = alphapos[0])
        plt.plot(xneg, utilityneg(negxneg, alphaneg[0]), 'b-',label = alphaneg[0])
        plt.legend()
        plt.savefig(filename+'.png')
        image_rslt.image = filename+'.png'
    KeyboardComponent end_to_rslt_key
      allowedKeys = 'right'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine result
    ImageComponent image_rslt
      image = None
      saveStartStop = False
      size = (864, 576)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 20
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    KeyboardComponent end_exp_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      store = nothing
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  Routine interval
  Routine trial_1
    ImageComponent interface_1
      image = ./interface/1.PNG
      saveStartStop = False
      size = (1280, 720)
      startVal [time (s)] = 0.0
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    SliderComponent slider_1
      forceEndRoutine = False
      granularity = 1
      pos = (254.1, -151.5)
      size = (400,50)
      startVal [time (s)] = 0.0
      storeHistory = True
      styles = ['rating', 'whiteOnBlack']
      ticks = (-2000,0)
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    TextComponent ratingText_1
      color = black
      letterHeight = 36
      pos = (376.5, 0)
      startVal [time (s)] = 0.0
      text = $slider_1.markerPos
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    ImageComponent OKbutton_1
      image = ./interface/OKbutton.png
      pos = (0, -300)
      saveStartStop = False
      size = (150,76)
      startVal [condition] = $slider_1.markerPos != None
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    MouseComponent mouse_1
      clickable = OKbutton_1
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_1
      Code Type = Py
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      Each Frame:
        if slider_1.markerPos != None:
            ratingText_1.text = int(slider_1.markerPos)
      End Routine:
        L = slider_1.markerPos
  Routine trial_2
    ImageComponent interface_2
      image = ./interface/2.PNG
      saveStartStop = False
      size = (1280, 720)
      startVal [time (s)] = 0.0
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    SliderComponent slider_2
      forceEndRoutine = False
      granularity = 1
      pos = (254.1, -151.5)
      size = (400,50)
      startVal [time (s)] = 0.0
      storeHistory = True
      styles = ['rating', 'whiteOnBlack']
      ticks = (0, 2000)
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    TextComponent ratingText_2
      color = black
      letterHeight = 36
      pos = (272.9, 0)
      startVal [time (s)] = 0.0
      text = $slider_2.markerPos
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    ImageComponent OKbutton_2
      image = ./interface/OKbutton.png
      pos = (0, -300)
      saveStartStop = False
      size = (150,76)
      startVal [condition] = $slider_2.markerPos != None
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    MouseComponent mouse_2
      clickable = OKbutton_2
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Py
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      Each Frame:
        if slider_2.markerPos != None:
            ratingText_2.text = int(slider_2.markerPos)
      End Routine:
        x1pos = slider_2.markerPos
  Routine trial_3
    ImageComponent interface_3
      image = ./interface/3.PNG
      saveStartStop = False
      size = (1280, 720)
      startVal [time (s)] = 0.0
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    SliderComponent slider_3
      forceEndRoutine = False
      granularity = 1
      pos = (254.1, -151.5)
      size = (400,50)
      startVal [time (s)] = 0.0
      storeHistory = True
      styles = ['rating', 'whiteOnBlack']
      ticks = (-2000, 0)
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    TextComponent text_x1pos
      color = blue
      letterHeight = 34
      pos = (-155.3, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent ratingText_3
      color = black
      letterHeight = 36
      pos = (272.9, 0)
      startVal [time (s)] = 0.0
      text = $slider_3.markerPos
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    ImageComponent OKbutton_3
      image = ./interface/OKbutton.png
      pos = (0, -300)
      saveStartStop = False
      size = (150,76)
      startVal [condition] = $slider_3.markerPos != None
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    MouseComponent mouse_3
      clickable = OKbutton_3
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Py
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      Begin Routine:
        slider_3.ticks = (x1pos,2000)
        text_x1pos.text = int(x1pos)
      Each Frame:
        if slider_3.markerPos != None:
            ratingText_3.text = int(slider_3.markerPos)
      End Routine:
        x2pos = slider_3.markerPos
  Routine trial_4
    ImageComponent interface_4
      image = ./interface/4.PNG
      saveStartStop = False
      size = (1280, 720)
      startVal [time (s)] = 0.0
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    SliderComponent slider_4
      forceEndRoutine = False
      granularity = 1
      pos = (254.1, -151.5)
      size = (400,50)
      startVal [time (s)] = 0.0
      storeHistory = True
      styles = ['rating', 'whiteOnBlack']
      ticks = (0, 2000)
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    TextComponent text_x2pos
      color = blue
      letterHeight = 34
      pos = (-155.3, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent ratingText_4
      color = black
      letterHeight = 36
      pos = (272.9, 0)
      startVal [time (s)] = 0.0
      text = $slider_4.markerPos
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    ImageComponent OKbutton_4
      image = ./interface/OKbutton.png
      pos = (0, -300)
      saveStartStop = False
      size = (150,76)
      startVal [condition] = $slider_4.markerPos != None
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    MouseComponent mouse_4
      clickable = OKbutton_4
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Py
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      Begin Routine:
        slider_4.ticks = (x2pos,2000)
        text_x2pos.text = int(x2pos)
      Each Frame:
        if slider_4.markerPos != None:
            ratingText_4.text = int(slider_4.markerPos)
      End Routine:
        x3pos = slider_4.markerPos
  Routine trial_5
    ImageComponent interface_5
      image = ./interface/5.PNG
      saveStartStop = False
      size = (1280, 720)
      startVal [time (s)] = 0.0
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    SliderComponent slider_5
      forceEndRoutine = False
      granularity = 1
      pos = (254.1, -151.5)
      size = (400,50)
      startVal [time (s)] = 0.0
      storeHistory = True
      styles = ['rating', 'whiteOnBlack']
      ticks = (0, 2000)
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    TextComponent text_x1pos_2
      color = blue
      letterHeight = 34
      pos = (-155.3, 151.6)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent ratingText_5
      color = black
      letterHeight = 36
      pos = (272.9, 0)
      startVal [time (s)] = 0.0
      text = $slider_5.markerPos
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    ImageComponent OKbutton_5
      image = ./interface/OKbutton.png
      pos = (0, -300)
      saveStartStop = False
      size = (150,76)
      startVal [condition] = $slider_5.markerPos != None
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    MouseComponent mouse_5
      clickable = OKbutton_5
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_5
      Code Type = Py
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      Begin Routine:
        slider_5.ticks = (0,x1pos)
        text_x1pos_2.text = int(x1pos)
      Each Frame:
        if slider_5.markerPos != None:
            ratingText_5.text = int(slider_5.markerPos)
      End Routine:
        x2posd = slider_5.markerPos
  Routine trial_6
    ImageComponent interface_6
      image = ./interface/6.PNG
      saveStartStop = False
      size = (1280, 720)
      startVal [time (s)] = 0.0
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    SliderComponent slider_6
      forceEndRoutine = False
      granularity = 1
      pos = (254.1, -151.5)
      size = (400,50)
      startVal [time (s)] = 0.0
      storeHistory = True
      styles = ['rating', 'whiteOnBlack']
      ticks = (0, 2000)
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    TextComponent text_x2posd
      color = blue
      letterHeight = 34
      pos = (-155.3, 151.6)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent ratingText_6
      color = black
      letterHeight = 36
      pos = (272.9, 0)
      startVal [time (s)] = 0.0
      text = $slider_6.markerPos
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    ImageComponent OKbutton_6
      image = ./interface/OKbutton.png
      pos = (0, -300)
      saveStartStop = False
      size = (150,76)
      startVal [condition] = $slider_6.markerPos != None
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    MouseComponent mouse_6
      clickable = OKbutton_6
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_6
      Code Type = Py
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      Begin Routine:
        slider_6.ticks = (0,x2posd)
        text_x2posd.text = int(x2posd)
      Each Frame:
        if slider_6.markerPos != None:
            ratingText_6.text = int(slider_6.markerPos)
      End Routine:
        x3posd = slider_6.markerPos
  Routine trial_7
    ImageComponent interface_7
      image = ./interface/7.PNG
      saveStartStop = False
      size = (1280, 720)
      startVal [time (s)] = 0.0
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    SliderComponent slider_7
      forceEndRoutine = False
      granularity = 1
      pos = (254.1, -151.5)
      size = (400,50)
      startVal [time (s)] = 0.0
      storeHistory = True
      styles = ['rating', 'whiteOnBlack']
      ticks = (0, 2000)
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    TextComponent text_L
      color = red
      letterHeight = 34
      pos = (-155.3, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent ratingText_7
      color = black
      letterHeight = 36
      pos = (272.9, 0)
      startVal [time (s)] = 0.0
      text = $slider_7.markerPos
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    ImageComponent OKbutton_7
      image = ./interface/OKbutton.png
      pos = (0, -300)
      saveStartStop = False
      size = (150,76)
      startVal [condition] = $slider_7.markerPos != None
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    MouseComponent mouse_7
      clickable = OKbutton_7
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_7
      Code Type = Py
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      Begin Routine:
        slider_7.ticks = (L,0)
        text_L.text = int(L)
      Each Frame:
        if slider_7.markerPos != None:
            ratingText_7.text = int(slider_7.markerPos)
      End Routine:
        x1neg = slider_7.markerPos
  Routine trial_8
    ImageComponent interface_8
      image = ./interface/8.PNG
      saveStartStop = False
      size = (1280, 720)
      startVal [time (s)] = 0.0
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    SliderComponent slider_8
      forceEndRoutine = False
      granularity = 1
      pos = (254.1, -151.5)
      size = (400,50)
      startVal [time (s)] = 0.0
      storeHistory = True
      styles = ['rating', 'whiteOnBlack']
      ticks = (0, 2000)
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    TextComponent text_x1neg
      color = red
      letterHeight = 34
      pos = (-155.3, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent ratingText_8
      color = black
      letterHeight = 36
      pos = (272.9, 0)
      startVal [time (s)] = 0.0
      text = $slider_8.markerPos
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    ImageComponent OKbutton_8
      image = ./interface/OKbutton.png
      pos = (0, -300)
      saveStartStop = False
      size = (150,76)
      startVal [condition] = $slider_8.markerPos != None
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    MouseComponent mouse_8
      clickable = OKbutton_8
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_8
      Code Type = Py
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      Begin Routine:
        slider_8.ticks = (x1neg,0)
        text_x1neg.text = int(x1neg)
      Each Frame:
        if slider_8.markerPos != None:
            ratingText_8.text = int(slider_8.markerPos)
      End Routine:
        x2neg = slider_8.markerPos
  Routine trial_9
    ImageComponent interface_9
      image = ./interface/9.PNG
      saveStartStop = False
      size = (1280, 720)
      startVal [time (s)] = 0.0
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    SliderComponent slider_9
      forceEndRoutine = False
      granularity = 1
      pos = (254.1, -151.5)
      size = (400,50)
      startVal [time (s)] = 0.0
      storeHistory = True
      styles = ['rating', 'whiteOnBlack']
      ticks = (0, 2000)
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    TextComponent text_x2neg
      color = red
      letterHeight = 34
      pos = (-155.3, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent ratingText_9
      color = black
      letterHeight = 36
      pos = (272.9, 0)
      startVal [time (s)] = 0.0
      text = $slider_9.markerPos
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    ImageComponent OKbutton_9
      image = ./interface/OKbutton.png
      pos = (0, -300)
      saveStartStop = False
      size = (150,76)
      startVal [condition] = $slider_9.markerPos != None
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    MouseComponent mouse_9
      clickable = OKbutton_9
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_9
      Code Type = Py
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      Begin Routine:
        slider_9.ticks = (x2neg,0)
        text_x2neg.text = int(x2neg)
      Each Frame:
        if slider_9.markerPos != None:
            ratingText_9.text = int(slider_9.markerPos)
      End Routine:
        x3neg = slider_9.markerPos
  Routine trial_10
    ImageComponent interface_10
      image = ./interface/10.PNG
      saveStartStop = False
      size = (1280, 720)
      startVal [time (s)] = 0.0
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    SliderComponent slider_10
      forceEndRoutine = False
      granularity = 1
      pos = (254.1, -151.5)
      size = (400,50)
      startVal [time (s)] = 0.0
      storeHistory = True
      styles = ['rating', 'whiteOnBlack']
      ticks = (0, 2000)
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    TextComponent text_x1neg_2
      color = red
      letterHeight = 34
      pos = (-155.3, 151.6)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent text_L_2
      color = red
      letterHeight = 34
      pos = (-155.3, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent ratingText_10
      color = black
      letterHeight = 36
      pos = (272.9, 0)
      startVal [time (s)] = 0.0
      text = $slider_10.markerPos
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    ImageComponent OKbutton_10
      image = ./interface/OKbutton.png
      pos = (0, -300)
      saveStartStop = False
      size = (150,76)
      startVal [condition] = $slider_10.markerPos != None
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    MouseComponent mouse_10
      clickable = OKbutton_10
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_10
      Code Type = Py
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      Begin Routine:
        slider_10.ticks = (L,x1neg)
        text_x1neg_2.text = int(x1neg)
        text_L_2.text = int(L)
      Each Frame:
        if slider_10.markerPos != None:
            ratingText_10.text = int(slider_10.markerPos)
      End Routine:
        x2negd = slider_10.markerPos
  Routine trial_11
    ImageComponent interface_11
      image = ./interface/11.PNG
      saveStartStop = False
      size = (1280, 720)
      startVal [time (s)] = 0.0
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    SliderComponent slider_11
      forceEndRoutine = False
      granularity = 1
      pos = (254.1, -151.5)
      size = (400,50)
      startVal [time (s)] = 0.0
      storeHistory = True
      styles = ['rating', 'whiteOnBlack']
      ticks = (0, 2000)
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    TextComponent text_x2negd
      color = red
      letterHeight = 34
      pos = (-155.3, 151.6)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent text_L_3
      color = red
      letterHeight = 34
      pos = (-155.3, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent ratingText_11
      color = black
      letterHeight = 36
      pos = (272.9, 0)
      startVal [time (s)] = 0.0
      text = $slider_11.markerPos
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    ImageComponent OKbutton_11
      image = ./interface/OKbutton.png
      pos = (0, -300)
      saveStartStop = False
      size = (150,76)
      startVal [condition] = $slider_11.markerPos != None
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    MouseComponent mouse_11
      clickable = OKbutton_11
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_11
      Code Type = Py
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      Begin Routine:
        slider_11.ticks = (L,x2negd)
        text_L_3.text = int(L)
        text_x2negd.text = int(x2negd)
      Each Frame:
        if slider_11.markerPos != None:
            ratingText_11.text = int(slider_11.markerPos)
      End Routine:
        x3negd = slider_11.markerPos
Flow
  Routine instruction
  Routine trial_1
  Routine trial_2
  Routine trial_3
  Routine trial_4
  Routine trial_5
  Routine trial_6
  Routine trial_7
  Routine trial_8
  Routine trial_9
  Routine trial_10
  Routine trial_11
  Routine end
  Routine result
